CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:HumanCyto
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:HumanCyto
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:6|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
    Select the input image:HumanCyto
    Name the output image:HumanMask
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:7|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
    Measure the area occupied by:Objects
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    Select object sets to measure:IdentifyPrimaryObjects

SaveImages:[module_num:8|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
    Select the type of image to save:Mask
    Select the image to save:HumanMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:HumanCyto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/results_cellarea/HumanBCArea
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_IdentifyPrimaryObjects,Image|AreaOccupied_TotalArea_IdentifyPrimaryObjects,Image|AreaOccupied_Perimeter_IdentifyPrimaryObjects,IdentifyPrimaryObjects|Number_Object_Number,IdentifyPrimaryObjects|Location_Center_Z,IdentifyPrimaryObjects|Location_Center_Y,IdentifyPrimaryObjects|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:HumanBCarea_
    Overwrite existing files without warning?:Yes
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